PsychoPy2experiment version="2020.2.4"
Settings
  Data filename = 'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'Session': '001', 'Age': '', 'Sex': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 900]
  color = grey
  expName = MRT
  logging level = debug
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Routines
  Routine Example
    TextComponent practiceProblemInstructions
      font = Times New Roman
      letterHeight = 0.045
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Let’s do some sample problems. Study the left-most box and choose the two objects to the right which are the same object given on the far left. Leave the incorrect ones blank. The first sample problem is done for you.
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    ImageComponent practiceProblemImage
      image = sampleProblem.jpg
      size = (1.70, 0.38)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent responseIndicator3
      font = Times New Roman
      letterHeight = 0.050
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please press ‘space’ to continue.
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    KeyboardComponent responseExample
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SampleQuestion2
    ImageComponent sampleQuestionImage2
      image = 2example.jpg
      size = (1.60, 0.38)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent inputIndicatorSampleQuestion2
      color = black
      font = Times New Roman
      letterHeight = 0.030
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please press ‘space’ to continue.
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    KeyboardComponent responseSampleQuestion2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SampleQuestion3
    ImageComponent sampleQuestionImage3
      image = 3example.jpg
      size = (1.60, 0.38)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent inputIndicatorSampleQuestion3
      color = black
      font = Times New Roman
      letterHeight = 0.030
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please press ‘space’ to continue.
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    KeyboardComponent responseSampleQuestion3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Answer
    TextComponent SampleAnswers
      color = black
      font = Times New Roman
      letterHeight = 0.040
      startVal [time (s)] = 0.0
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      text:
        Answers:       (1) first and second drawings are correct
                            (2) first and third drawings are correct
                               (3) second and third drawings are correct
    TextComponent inputIndicatorAnswer
      color = black
      font = Times New Roman
      letterHeight = 0.030
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please press ‘space’ to continue.
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    KeyboardComponent responseAnswer
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions
    TextComponent InstructionsText
      font = Times New Roman
      letterHeight = 0.050
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
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      text:
        This test has two parts. You will have 3 minutes for each of the two parts. Each part has 10 questions.

        Work as quickly as you can without sacrificing accuracy. It will not be to your advantage to guess unless you have some idea which choice is correct.
    TextComponent responseIndicator6
      font = Times New Roman
      letterHeight = 0.050
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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      text:
        Do Not Continue Until Asked To Do So.

        Press ‘space’ to continue.
    KeyboardComponent responseInstructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        countdownClock = core.CountdownTimer(180)
  Routine SampleQuestion1
    TextComponent practiceProblemInstructions_2
      font = Times New Roman
      letterHeight = 0.030
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Now let’s do some sample problems. For each problem there is a primary object on the far left. You are to determine which two of four objects to the right are the same object given on the far left. In each problem always two of the four drawings are the same object as the one on the left. You are to put Xs in the boxes below the correct ones, and leave the incorrect ones blank. The first sample problem is done for you.
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    ImageComponent practiceProblemImage_2
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent inputIndicatorPractice_2
      font = Times New Roman
      letterHeight = 0.030
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please press ‘space’ to continue.
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    KeyboardComponent responseExample_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent EndScreen
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = You have now completed the experiment.
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    KeyboardComponent endResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Part1Title
    TextComponent Part1Text
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Part I.
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    KeyboardComponent responsePart1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent responseIndicator7
      font = Times New Roman
      letterHeight = 0.050
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please press ‘space’ to continue
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  Routine Part1
    ImageComponent imagesPart1
      image [set every repeat] = $ImagePart1
      size = (1.40, 0.31)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent responseIndicator8
      font = Times New Roman
      letterHeight = 0.050
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press ‘space’ to continue.
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    KeyboardComponent responseQuestion1
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent box1
      fillColor [set every repeat] = green
      pos = (-0.15, -0.20)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent box2
      fillColor [set every repeat] = green
      pos = (0.10, -0.2)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent box3
      fillColor [set every repeat] = green
      pos = (0.35, -0.20)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent box4
      fillColor [set every repeat] = green
      pos = (0.60, -0.20)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = box4, box1, box2, box3
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent part1Code
      Code Type = Auto->JS
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      Begin Experiment:
        countdownStarted = False
      Begin Routine:
        #Initializing Variables for Checkboxes
        checkboxes=[box1, box2, box3, box4]
        clicked=[]
        #Setting Clock
        if not countdownStarted:
            countdownClock = core.CountdownTimer(180)
            countdownStarted = True
      Each Frame:
        #Creating Checkboxes
        for box in checkboxes:
            if mouse.isPressedIn(box) and box.name not in clicked:
                box.color = "black"
                clicked.append(box.name)
        #Establishing and Displaying Timer
        timeRemaining = countdownClock.getTime()
        if timeRemaining <=0.0:
            continueRoutine = False
            trials.finished = True
            countdownStarted = False
            continueExperiment = True
        else:
            minutes = int (timeRemaining/60.0)
            tenSeconds= int((timeRemaining - (minutes*60))/10.0)
            oneSeconds = int (timeRemaining - (minutes*60 + tenSeconds*10))
            timeText = str(minutes) + ':'  + str(tenSeconds) + str(oneSeconds)
      End Routine:
        #Correct Point System
        correct=0
        for answer in mouse.clicked_name:
            if answer in corrAns:
                correct +=1
        trials.addData('correct', correct)
    TextComponent clockPart1
      font = Times New Roman
      letterHeight = 0.080
      pos = (-0.6, 0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $timeText
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  Routine Part2Title
    TextComponent part2Indicator
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Part II.
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    KeyboardComponent part2IndicatorResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent responseIndicator9
      font = Times New Roman
      letterHeight = 0.050
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please press ‘space’ to continue.
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  Routine Part2
    TextComponent responseIndicator10
      font = Times New Roman
      letterHeight = 0.050
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press ‘space’ to continue.
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    KeyboardComponent keyboardIndicator
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent part2Images
      image [set every repeat] = $image
      size = (1.40, 0.31)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    PolygonComponent box21
      fillColor [set every repeat] = green
      pos = (-0.15, -0.20)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent box22
      fillColor [set every repeat] = green
      pos = (0.10, -0.20)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent box23
      fillColor [set every repeat] = green
      pos = (0.35, -0.20)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent box24
      fillColor [set every repeat] = green
      pos = (0.60, -0.20)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent mouse2
      clickable = box21, box22, box23, box24
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent part2Code
      Code Type = Auto->JS
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      Begin Experiment:
        countdownStarted=False
        secondLoop = 0
      Begin Routine:
        #Initializing Variables for Checkbox
        checkboxes= [box21, box22, box23, box24]
        clicked  = []

        #Clock
        if secondLoop<=0:
            countdownClock = core.CountdownTimer(180)
            countdownStarted = True
            secondLoop = secondLoop +1
      Each Frame:
        #Checkboxes
        for box in checkboxes:
            if mouse2.isPressedIn(box) and box.name not in clicked:
                box.color = "black"
                clicked.append(box.name)

        #Creating Clock
        timeRemaining = countdownClock.getTime()
        if timeRemaining <=0.0:
            continueRoutine = False
            trials2.finished = True
            countdownStarted = False
        else:
            minutes = int (timeRemaining/60.0)
            tenSeconds= int((timeRemaining - (minutes*60))/10.0)
            oneSeconds = int (timeRemaining - (minutes*60 + tenSeconds*10))
            timeText = str(minutes) + ':'  + str(tenSeconds) + str(oneSeconds)
      End Routine:
        #Checkboxes Correct
        correct=0
        for checkboxes in mouse2.clicked_name:
            if checkboxes in corrAns2:
                correct +=1
        trials.addData('correct', correct)
    TextComponent clockPart2
      font = Times New Roman
      letterHeight = 0.080
      pos = (-0.6, 0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $timeText
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  Routine EndPart1Instr
    TextComponent instrStop
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Stop.

        Do Not Continue Until Asked To Do So.

        Please press ‘space’ to continue.
    KeyboardComponent stopIndicator
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine MRTWelcomeScreen
    TextComponent WelcomeScreenText
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Mental Rotation Test (MRT)
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent responseIndicator1
      font = Times New Roman
      letterHeight = 0.050
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please press any key to continue.
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  Routine Introduction
    TextComponent introductionText
      font = Times New Roman
      letterHeight = 0.05
      pos = (0, 0.38)
      startVal [time (s)] = 0
      text = In this test, you will be tested on your ability to identify an object at different angles. An example is presented below where the same single object is presented in five different positions. 
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    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent exampleText
      font = Times New Roman
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        Below are two drawings of new objects that cannot be made to match the above five drawings.
    TextComponent responseIndicator2
      font = Times New Roman
      letterHeight = 0.050
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please press ‘space’ to continue.
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    ImageComponent example
      image = example.jpg
      pos = (0, 0.15)
      size = (0.80, 0.18)
      startVal [time (s)] = 0
      texture resolution = 512
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    ImageComponent image_2
      image = sample2.jpg
      pos = (0, -0.25)
      size = (0.70, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine SampleQuestions
    ImageComponent sampleQuestionImage1
      image [set every repeat] = $image
      size = (1.40, 0.31)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent responseIndicator4
      font = Times New Roman
      letterHeight = 0.050
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please press ‘space’ to continue.
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    KeyboardComponent responseSampleQuestion1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent SampleQuestionsInstructions
      font = Times New Roman
      letterHeight = 0.043
      pos = (0, 0.30)
      startVal [time (s)] = 0.0
      text = Choose the two drawings of the four on the right which show the same object as the one on the left by pressing the boxes below the drawing. Keep in mind you cannot change your answer after you select it. After making your selection, press space to continue.
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    PolygonComponent sampleBox1
      fillColor [set every repeat] = green
      pos = (-0.20, -0.210)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent sampleBox2
      fillColor [set every repeat] = green
      pos = (0.05, -0.210)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent sampleBox3
      fillColor [set every repeat] = green
      pos = (0.30, -0.210)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent sampleBox4
      fillColor [set every repeat] = green
      pos = (0.55, -0.210)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent mouse3
      clickable = sampleBox1, sampleBox2, sampleBox3, sampleBox4
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        checkboxes = [sampleBox1, sampleBox2, sampleBox3, sampleBox4]
        clicked = []
      Each Frame:
        for box in checkboxes:
            if mouse3.isPressedIn(box) and box.name not in clicked:
                box.color = "black"
                clicked.append(box.name)
      End Routine:
        correct = 0
        for checkboxes in mouse3.clicked_name:
            if checkboxes in corrAnsSample:
                correct +=1
        trials3.addData('sampleCorrect', correct)
  Routine Feedback
    TextComponent feedback1
      font = Times New Roman
      letterHeight = 0.050
      pos = (0.37, 0.10)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(correct)
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    TextComponent numberOfDrawingsCorrectSample
      font = Times New Roman
      letterHeight = 0.050
      pos = (-0.10, 0.1)
      startVal [time (s)] = 0.0
      text = Number of drawings you answered correctly:
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    TextComponent numberCorrect
      font = Times New Roman
      letterHeight = 0.050
      pos = (0.0, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $corrAnsText
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent responseIndicator5
      font = Times New Roman
      letterHeight = 0.050
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Please press ‘space’ to continue.
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Flow
  Routine MRTWelcomeScreen
  Routine Introduction
  Routine Example
  LoopInitiator trials3 loopType="TrialHandler"
    conditionsFile = sample.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('image', '1example.jpg'), ('corrAnsSample', ['sampleBox1', 'sampleBox2']), ('corrAnsText', 'The correct answers were the first and second drawings.')]),
      OrderedDict([('image', '2example.jpg'), ('corrAnsSample', ['sampleBox1', 'sampleBox3']), ('corrAnsText', 'The correct answers were the first and third drawings.')]),
      OrderedDict([('image', '3example.jpg'), ('corrAnsSample', ['sampleBox2', 'sampleBox3']), ('corrAnsText', 'The correct answers were the second and third drawings.')])]
    Routine SampleQuestions
    Routine Feedback
  LoopTerminator trials3
  Routine Instructions
  Routine Part1Title
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = boxCorrect.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('ImagePart1', 'P1Q1.jpg'), ('corrAns', ['box1', 'box3'])]),
      OrderedDict([('ImagePart1', 'P1Q2.jpg'), ('corrAns', ['box1', 'box4'])]),
      OrderedDict([('ImagePart1', 'P1Q3.jpg'), ('corrAns', ['box2', 'box4'])]),
      OrderedDict([('ImagePart1', 'P1Q4.jpg'), ('corrAns', ['box2', 'box3'])]),
      OrderedDict([('ImagePart1', 'P1Q5.jpg'), ('corrAns', ['box1', 'box3'])]),
      OrderedDict([('ImagePart1', 'P1Q6.jpg'), ('corrAns', ['box1', 'box4'])]),
      OrderedDict([('ImagePart1', 'P1Q7.jpg'), ('corrAns', ['box2', 'box4'])]),
      OrderedDict([('ImagePart1', 'P1Q8.jpg'), ('corrAns', ['box2', 'box3'])]),
      OrderedDict([('ImagePart1', 'P1Q9.jpg'), ('corrAns', ['box3', 'box4'])]),
      OrderedDict([('ImagePart1', 'P1Q10.jpg'), ('corrAns', ['box1', 'box4'])])]
    Routine Part1
  LoopTerminator trials
  Routine EndPart1Instr
  Routine Part2Title
  LoopInitiator trials2 loopType="TrialHandler"
    conditionsFile = part2QuestionsWay2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('image', 'P2Q11.jpg'), ('corrAns2', ['box22', 'box24'])]),
      OrderedDict([('image', 'P2Q12.jpg'), ('corrAns2', ['box22', 'box24'])]),
      OrderedDict([('image', 'P2Q13.jpg'), ('corrAns2', ['box22', 'box24'])]),
      OrderedDict([('image', 'P2Q14.jpg'), ('corrAns2', ['box21', 'box24'])]),
      OrderedDict([('image', 'P2Q15.jpg'), ('corrAns2', ['box22', 'box24'])]),
      OrderedDict([('image', 'P2Q16.jpg'), ('corrAns2', ['box22', 'box23'])]),
      OrderedDict([('image', 'P2Q17.jpg'), ('corrAns2', ['box21', 'box23'])]),
      OrderedDict([('image', 'P2Q18.jpg'), ('corrAns2', ['box21', 'box24'])]),
      OrderedDict([('image', 'P2Q19.jpg'), ('corrAns2', ['box22', 'box24'])]),
      OrderedDict([('image', 'P2Q20.jpg'), ('corrAns2', ['box22', 'box23'])])]
    Routine Part2
  LoopTerminator trials2
  Routine End
